File_New

;

Set_Pipeline_Parameter_To_Folder_Path
/PARAMETER_NAME=DATA_FOLDER
/PARAMETER_VALUE=
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/SET_PROMPT=Select a c3d data directory
! /ALPHABETIZE=TRUE
;

Set_Pipeline_Parameter
/PARAMETER_NAME=V3D_MODEL
/PARAMETER_VALUE=model.mdh

!/PARAMETER_VALUE=::MODEL_FOLDER&fullbody-general-1114.mdh
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! /MULTI_PASS=FALSE
;

Set_Pipeline_Parameter
/PARAMETER_NAME= All_Activity_Names
/PARAMETER_VALUE= baseline
! /+walk_speed_large+fpa_large+fpa_small+step_width_large+step_width_small+trunk_sway_large+trunk_sway_small+dual_task+sit2stand
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;

For_Each
/ITERATION_PARAMETER_NAME= Activity_Name
! /ITERATION_PARAMETER_COUNT_NAME
/ITEMS= ::All_Activity_Names
;

Set_Pipeline_Parameter
/PARAMETER_NAME= Activity_Calib_File
/PARAMETER_VALUE= ::DATA_FOLDER&Calib_&::Activity_Name&*.c3d
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;

Set_Pipeline_Parameter
/PARAMETER_NAME= Activity_File
/PARAMETER_VALUE= ::DATA_FOLDER&::Activity_Name&*.c3d
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;

Create_Hybrid_Model
/CALIBRATION_FILE=::Activity_Calib_File
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!/RANGE=100+150
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;

Apply_Model_Template
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/MODEL_TEMPLATE=::V3D_MODEL
! /SET_PROMPT=Open model file
! /VIEW_BUILDMODEL_RESULTS=2
;

Set_Subject_Mass
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! /PROMPT_SIZE=90
/WEIGHT=REPLACE_WITH_MEASURED_VALUE
/UNITS=kg
;

Set_Subject_Height
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/HEIGHT=REPLACE_WITH_MEASURED_VALUE
! /UNITS=m
;

Build_Model
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! /REBUILD_ALL_MODELS=FALSE
! /DISPLAY_RESULTS=TRUE
;

File_Open
 /FILE_NAME=::Activity_File
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! /SET_PROMPT=File_Open
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;

Assign_Model_File
/CALIBRATION_FILE=::Activity_Calib_File
/MOTION_FILE_NAMES=::Activity_File
;

Assign_Tags_To_Files
/MOTION_FILE_NAMES= ::Activity_File
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/TAGS=::Activity_Name
;

End_For_Each
/ITERATION_PARAMETER_NAME=Activity_Name
;

**__Add_a_Comment__**
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;

**__Add_a_Comment__**
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;

! Get the names of all files in the workspace
Set_Pipeline_Parameter_To_List_Of_Tagged_Files
/PARAMETER_NAME=FILES
/TAG_NAME=ALL_FILES
! /GET_CURRENT_SELECTED_FILES=false
! /USE_SHORT_FILENAMES=false
;

Multiply_Signals
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=HEIGHT+MASS
/COMPONENT_SEQUENCE=ALL
! /RESULT_FOLDER=PROCESSED
/RESULT_NAME=GLOBAL::HEIGHT_MASS_PRODUCT
;

For_Each
/ITERATION_PARAMETER_NAME=FILE
/ITEMS=::FILES
;

! Select active file
Select_Active_File
/FILE_NAME=::FILE
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;

Lowpass_Filter
/SIGNAL_TYPES=ANALOG
! /SIGNAL_FOLDER=ORIGINAL
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! /FILTER_CLASS=BUTTERWORTH
/FREQUENCY_CUTOFF=15
! /NUM_REFLECTED=6
! /NUM_EXTRAPOLATED=0
! /TOTAL_BUFFER_SIZE=6
! /NUM_BIDIRECTIONAL_PASSES=1
;

Lowpass_Filter
/SIGNAL_TYPES=TARGET
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/FREQUENCY_CUTOFF=6
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;

Modify_Force_Platform_Parameters
/FP_USED=4
/FP_TYPE=2+2+2+2
/FP_CHANNEL=1+2+3+4+5+6+7+8+9+10+11+12+13+14+15+16+17+18+19+20+21+22+23+24
/FP_ORIGIN=0+0+22+0+0+22+0+0+22+0+0+22
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! /STORE_CALMATRIX=BYROW
/FP_ZERO=1+0
/FP_ZEROS=1+0+1+0+1+0+1+0
/FP_CORNER1=-8.001+-608.00098+0.+-8.001+-0.001+0.+0.+-8.+0.+0.+600.+0.
/FP_CORNER2=-408.00098+-607.99994+0.+-408.00098+0.001+0.+400.+-8.+0.+400.+600.+0.
/FP_CORNER3=-407.99899+-7.999+0.+-407.99899+600.001+0.+400.+-607.99994+0.+400.+0.+0.
/FP_CORNER4=-7.999+-8.001+0.+-7.999+599.999+0.+0.+-607.99994+0.+0.+0.+0.
/FP_COP_POLYNOMIAL=0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0+0
/FP_COP_TRANSLATION=0+0+0+0+0+0+0+0+0+0+0+0
/FP_COP_ROTATION=0+0+0+0+0+0+0+0+0+0+0+0
! /UPDATE_C3D_FILE=FALSE
! /MODIFY_CAL_FILE=FALSE
;

Set_Use_Processed_Forces
/USE_PROCESSED=FALSE
;

Set_Use_Processed_Analog
/USE_PROCESSED=TRUE
;

Set_Use_Processed_Targets
/USE_PROCESSED=TRUE
/RECALC=TRUE
;

Assign_Segments_To_Force_And_COP
! /FORCE_SIGNAL_TYPE=FORCE
! /FORCE_SIGNAL_FOLDER=ORIGINAL
/FORCE_SIGNAL_NAME=FP1
! /COP_SIGNAL_TYPE=COFP
! /COP_SIGNAL_FOLDER=ORIGINAL
/COP_SIGNAL_NAME=FP1
! /FREEMOMENT_SIGNAL_TYPE=FREEMOMENT
! /FREEMOMENT_SIGNAL_FOLDER=ORIGINAL
/FREEMOMENT_SIGNAL_NAME=FP1
/AUTO_ASSIGN=FALSE
/SEGMENT_NAME=Left Foot
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/EVENT_SEQUENCE=LON+LOFF
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;

Assign_Segments_To_Force_And_COP
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/FORCE_SIGNAL_NAME=FP2
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/COP_SIGNAL_NAME=FP2
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/FREEMOMENT_SIGNAL_NAME=FP2
/AUTO_ASSIGN=FALSE
/SEGMENT_NAME=Right Foot
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/EVENT_SEQUENCE=RON+ROFF
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;

Automatic_Gait_Events
! /FRAME_WINDOW=8
! /USE_TPR=TRUE
;

Compute_Model_Based_Data
/RESULT_NAME=RIGHT_HIP_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
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! /NEGATEX=FALSE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
! /TREADMILL_DATA=FALSE
! /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
! /TREADMILL_SPEED=0.0
;

Compute_Model_Based_Data
/RESULT_NAME=RIGHT_HIP_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=RIGHT_KNEE_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=RIGHT_KNEE_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=RIGHT_ANKLE_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=RFT
/REFERENCE_SEGMENT=RSK
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=RIGHT_ANKLE_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=RFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=LEFT_HIP_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=LTH
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=LEFT_HIP_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LTH
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=RPV
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=LEFT_KNEE_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=LEFT_KNEE_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LSK
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LTH
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

Compute_Model_Based_Data
/RESULT_NAME=LEFT_ANKLE_ANGLE
/FUNCTION=JOINT_ANGLE
/SEGMENT=LFT
/REFERENCE_SEGMENT=LSK
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
/RESULT_NAME=LEFT_ANKLE_MOMENT
/FUNCTION=JOINT_MOMENT
/SEGMENT=LFT
/REFERENCE_SEGMENT=
/RESOLUTION_COORDINATE_SYSTEM=LSK
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/NORMALIZATION=TRUE
/NORMALIZATION_METHOD=DEFAULT_NORMALIZATION
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;

End_For_Each
/ITERATION_PARAMETER_NAME=FILE
;

Recalc

;

For_Each
/ITERATION_PARAMETER_NAME=FILE
/ITEMS=::FILES
;

! Create a pipeline parameter containing the name of the c3d file
! but replace the extension .c3d with the extension .txt which
! will be used for the exported file.

Set_Pipeline_Parameter
/PARAMETER_NAME=CSV_FILE
/PARAMETER_VALUE=::FILE
/PARAMETER_VALUE_SEARCH_FOR=.c3d
/PARAMETER_VALUE_REPLACE_WITH=.csv
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;

Set_Pipeline_Parameter
/PARAMETER_NAME=CSV_FILE
/PARAMETER_VALUE=::CSV_FILE
/PARAMETER_VALUE_SEARCH_FOR=vicon
/PARAMETER_VALUE_REPLACE_WITH=v3d
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;

! Select active file
Select_Active_File
/FILE_NAME=::FILE
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;

! Loop to convert events from time to frames for 4 HS reps
For_Each
/ITERATION_PARAMETER_NAME=INDEX
/ITEMS=LOFF+LON+ROFF+RON
;

! Expression to convert events wrt frames
Evaluate_Expression
/EXPRESSION=EVENT_LABEL::ORIGINAL&:&:&::INDEX&*PARAMETERS::POINT::RATE+1
/RESULT_NAME=::INDEX
/RESULT_TYPE=METRIC
/RESULT_FOLDER=EVENT_EXPORT
;

End_For_Each
/ITERATION_PARAMETER_NAME=INDEX
;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=LINK_MODEL_BASED
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/SIGNAL_NAMES=RIGHT_HIP_ANGLE+RIGHT_HIP_ANGLE+RIGHT_HIP_ANGLE+RIGHT_HIP_MOMENT+RIGHT_HIP_MOMENT+RIGHT_HIP_MOMENT+RIGHT_KNEE_ANGLE+RIGHT_KNEE_ANGLE+RIGHT_KNEE_ANGLE+RIGHT_KNEE_MOMENT+RIGHT_KNEE_MOMENT+RIGHT_KNEE_MOMENT+RIGHT_ANKLE_ANGLE+RIGHT_ANKLE_ANGLE+RIGHT_ANKLE_ANGLE+RIGHT_ANKLE_MOMENT+RIGHT_ANKLE_MOMENT+RIGHT_ANKLE_MOMENT+LEFT_HIP_ANGLE+LEFT_HIP_ANGLE+LEFT_HIP_ANGLE+LEFT_HIP_MOMENT+LEFT_HIP_MOMENT+LEFT_HIP_MOMENT+LEFT_KNEE_ANGLE+LEFT_KNEE_ANGLE+LEFT_KNEE_ANGLE+LEFT_KNEE_MOMENT+LEFT_KNEE_MOMENT+LEFT_KNEE_MOMENT+LEFT_ANKLE_ANGLE+LEFT_ANKLE_ANGLE+LEFT_ANKLE_ANGLE+LEFT_ANKLE_MOMENT+LEFT_ANKLE_MOMENT+LEFT_ANKLE_MOMENT
/FILE_NAME=::CSV_FILE
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/COMPONENT_SEQUENCE=X, Y, Z, X, Y, Z, X, Y, Z, X, Y, Z, X, Y, Z, X, Y, Z, X, Y, Z, X, Y, Z, X, Y, Z, X, Y, Z, X, Y, Z, X, Y, Z
/SIGNAL_PRECISION=5
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! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

End_For_Each
/ITERATION_PARAMETER_NAME=FILE
;

Set_Pipeline_Parameter_To_List_Of_Tagged_Files
/PARAMETER_NAME=FILES
/TAG_NAME=ALL_FILES
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;

For_Each
/ITERATION_PARAMETER_NAME=FILE
/ITEMS=::FILES
;

Set_Pipeline_Parameter
/PARAMETER_NAME=TXT_FILE
/PARAMETER_VALUE=::FILE
/PARAMETER_VALUE_SEARCH_FOR=.c3d
/PARAMETER_VALUE_REPLACE_WITH=_gait_event.txt
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;

Set_Pipeline_Parameter
/PARAMETER_NAME=TXT_FILE
/PARAMETER_VALUE=::TXT_FILE
/PARAMETER_VALUE_SEARCH_FOR=vicon
/PARAMETER_VALUE_REPLACE_WITH=gait event
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;

Select_Active_File
/FILE_NAME=::FILE
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;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=EVENT_LABEL
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/SIGNAL_NAMES=RON+ROFF+LON+LOFF
/FILE_NAME=::TXT_FILE
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/COMPONENT_SEQUENCE=ALL
/SIGNAL_PRECISION=5
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;

End_For_Each
/ITERATION_PARAMETER_NAME=FILE
;

